PsychoPy2experiment version="3.2.3"
Settings
  Data filename = u'data/%s_%s_%s' % (expInfo['ParticipantID'], expName, expInfo['date'])
  Experiment info = {'ParticipantID': ''}
  Full-screen window = True
  Monitor = testMonitor
  Save csv file = True
  Save excel file = True
  Save log file = False
  Screen = 1
  Show mouse = True
  Units = height
  Use version = latest
  Window size (pixels) = [1440, 900]
  expName = SurveyExpMetaMem
  logging level = data
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Routines
  Routine introduction
    TextComponent introText
      letterHeight = 0.02
      startVal [time (s)] = 0.0
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      text:
        Welcome To The Word-Rating Survey
        I appreciate you for participating in this part of the study. The survey being conducted today is investigating emotion, and concerns how people respond to different types of words. On the next screens you will see some figures.
        We call these figures SAM, and you will be using these figures to rate how different words seem to you.
        SAM shows two different kinds of feelings:

        Happy vs. Unhappy
        and
        Excited vs. Calm.

        You will use both of these ratings for each word that is presented to you. Please notice that both feelings are arrayed along a 9-point scale.

        On the happy vs. unhappy scale, which ranges from a frown to a smile, 9 means happy, pleased, satisfied, contented or hopeful. 1 on the other hand means unhappy, annoyed, unsatisfied, melancholic, despaired, or bored. If the word feels neutral to you, neither happy nor sad, you can select 5 on the ratingscale.

        On the excited vs. calm scale, which ranges from a SAM to an exploding SAM, 9 means stimulated, excited, frenzied, jittered, or aroused. 1 on the other hand means relaxed, calm, sluggish, dull, sleepy, or unaroused. If the word feels neutral to you, neither exciting nor calm, you can select 5 on the ratingscale.

        There will be a total of 1200 words that you will need to rated and you will be compensated 100kr for helping us with this survey part ofthe study.

        Please work at a rapid place and don’t spend too much time thinking about each word. Rather, make your ratings based on your first
        and immediate reaction as you read each word.

        Click the screen to continue.
    MouseComponent mouse
      forceEndRoutineOnPress = any click
      saveMouseState = final
      startVal [time (s)] = 0.0
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  Routine valence_instruction
    TextComponent InstructValenceText
      letterHeight = 0.025
      startVal [time (s)] = 0.0
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      text:
        This Is The Scale For Valence Ratings

        A 1 On The Scale Equals To Very Low Valence (Unhappy)

        A 5 On The Scale Equals To Neutral

        A 9 On The Scale Equals To Very High Valence (Happy)

        You select a number on the scale using your keyboards keys: 1-9

        Click on the screen to continue
    ImageComponent Valence
      image = Valence.png
      pos = (0, 0.3)
      size = (0.50, 0.25)
      startVal [time (s)] = 0.0
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    MouseComponent mouse_2
      forceEndRoutineOnPress = any click
      saveMouseState = final
      startVal [time (s)] = 0.0
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  Routine arousal_instruction
    TextComponent InstructArousalText
      letterHeight = 0.025
      startVal [time (s)] = 0.0
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      text:
        This Is The Scale For Arousal Ratings

        A 1 On The Scale Equals To Very Low Arousal (Calm)

        A 5 On The Scale Equals To Neutral

        A 9 On The Scale Equals To Very High Arousal (Excited)

        You select a number on the scale using your keyboards keys: 1-9

        Click on the screen to continue
    ImageComponent Arousal
      image = Arousal.png
      pos = (0, 0.3)
      size = (0.50, 0.25)
      startVal [time (s)] = 0.0
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    MouseComponent mouse_3
      forceEndRoutineOnPress = any click
      saveMouseState = final
      startVal [time (s)] = 0.0
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  Routine goodbye
    TextComponent GoodbyeText
      letterHeight = 0.04
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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      text:
        Thank You For Participating
        In This Survey Part Of The Experiment!

        It Has Been A PleasureTo Have You On Board!

        Take Care!
  Routine Intro_To_Click
    TextComponent text
      letterHeight = 0.04
      startVal [time (s)] = 0.0
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      text:
        Welcome To The Emotional Meta-Memory Survey

        Click On the Screen To Continue
    MouseComponent mouse_4
      forceEndRoutineOnPress = any click
      saveMouseState = final
      startVal [time (s)] = 0.0
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  Routine Valence_2
    TextComponent WordPresentation2
      color = White
      letterHeight = 0.09
      pos = (0, -0.2)
      startVal [time (s)] = 0.0
      text [set every repeat] = $word
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    ImageComponent ValenceImage
      image = Valence.png
      pos = (0, .25)
      size = (0.8, 0.25)
      startVal [time (s)] = 0.0
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    TextComponent text_2
      letterHeight = 0.04
      pos = (0, -0.1)
      startVal [time (s)] = 0.0
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      text:
        Valence
        1 = Unhappy, 9 = Happy
    KeyboardComponent key_resp
      allowedKeys = '1','2','3','4','5','6','7','8','9'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      syncScreenRefresh = False
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  Routine Arousal_2
    TextComponent WordPresentation
      letterHeight = 0.09
      pos = (0, -0.2)
      startVal [time (s)] = 0.0
      text [set every repeat] = $word
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    ImageComponent ArousalGuide
      image = Arousal.png
      pos = (0, .25)
      size = (0.80, 0.25)
      startVal [time (s)] = 0.0
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    TextComponent text_3
      letterHeight = 0.04
      pos = (0, -0.1)
      startVal [time (s)] = 0.0
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      text:
        Arousal
        1 = Calm, 9 = Excited
    KeyboardComponent A_key_resp
      allowedKeys = '1','2','3','4','5','6','7','8','9'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      syncScreenRefresh = False
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Flow
  Routine Intro_To_Click
  Routine introduction
  Routine valence_instruction
  Routine arousal_instruction
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = Workbook2.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('Word', 'dragon')]),
      OrderedDict([('Word', 'fuck')]),
      OrderedDict([('Word', 'zealous')]),
      OrderedDict([('Word', 'nudist')]),
      OrderedDict([('Word', 'night')]),
      OrderedDict([('Word', 'drunk')]),
      OrderedDict([('Word', 'chest')]),
      OrderedDict([('Word', 'duet')]),
      OrderedDict([('Word', 'extreme')]),
      OrderedDict([('Word', 'try')]),
      OrderedDict([('Word', 'cheerleader')]),
      OrderedDict([('Word', 'astonished')]),
      OrderedDict([('Word', 'mountain')]),
      OrderedDict([('Word', 'mingle')]),
      OrderedDict([('Word', 'attain')]),
      OrderedDict([('Word', 'curiosity')]),
      OrderedDict([('Word', 'sing')]),
      OrderedDict([('Word', 'outgoing')]),
      OrderedDict([('Word', 'mail')]),
      OrderedDict([('Word', 'firefighter')]),
      OrderedDict([('Word', 'climax')]),
      OrderedDict([('Word', 'game')]),
      OrderedDict([('Word', 'doughnut')]),
      OrderedDict([('Word', 'earn')]),
      OrderedDict([('Word', 'model')]),
      OrderedDict([('Word', 'charisma')]),
      OrderedDict([('Word', 'inspired')]),
      OrderedDict([('Word', 'gourmet')]),
      OrderedDict([('Word', 'energy')]),
      OrderedDict([('Word', 'life')]),
      OrderedDict([('Word', 'impressed')]),
      OrderedDict([('Word', 'brownie')]),
      OrderedDict([('Word', 'festival')]),
      OrderedDict([('Word', 'sister')]),
      OrderedDict([('Word', 'personality')]),
      OrderedDict([('Word', 'bright')]),
      OrderedDict([('Word', 'puppy')]),
      OrderedDict([('Word', 'magnificence')]),
      OrderedDict([('Word', 'cheeseburger')]),
      OrderedDict([('Word', 'birth')]),
      OrderedDict([('Word', 'kissing')]),
      OrderedDict([('Word', 'progress')]),
      OrderedDict([('Word', 'accomplish')]),
      OrderedDict([('Word', 'diamond')])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
    Routine Arousal_2
    Routine Valence_2
  LoopTerminator trials
  Routine goodbye
